{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "header_series": {
            "filters": {}, 
            "params": {}
        }, 
        "qc_series": {
            "filters": {}, 
            "params": {
                "bodyHU_aculon": 0.0, 
                "bodyHU_air": -1000.0, 
                "bodyHU_teflon": 920.0, 
                "headHU_air": -1000.0, 
                "headHU_pvc": 1128.0, 
                "headHU_water": 1.2, 
                "headdiammm_in": 190.0, 
                "headdiammm_out": 194.0, 
                "scannername": "iCT 256", 
                "use_bodyairdistmm": 130.0, 
                "use_headairdistmm": 93.0
            }
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Arnold Schilham, UMCU", 
        "creator": "generate_config_json.py version 20180912", 
        "description": "CT/PerformanceQuickIQ for Philips iCT 256", 
        "version": "20160622"
    }, 
    "info": {
        "acqdatetime": {
            "params": {}
        }, 
        "header_series": {
            "params": {}
        }, 
        "qc_series": {
            "params": {
                "bodyHU_aculon": "HU value of aculon for Body phantom", 
                "bodyHU_air": "HU value of air for Body phantom", 
                "bodyHU_teflon": "HU value of teflon for Body phantom", 
                "headHU_air": "HU value of air for Head phantom", 
                "headHU_pvc": "HU value of PVC shell for Head phantom", 
                "headHU_water": "HU value of water for Head phantom", 
                "headdiammm_in": "inner diameter of PVC shell of head phantom in mm", 
                "headdiammm_out": "outer diameter of PVC shell of head phantom in mm", 
                "scannername": "your identifier for this scanner", 
                "use_bodyairdistmm": "distance in mm to ROI for Air for Body (def. 115.75)", 
                "use_headairdistmm": "distance in mm to ROI for Air for Head (def. 79.75)"
            }
        }
    }
}